CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Treatment>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_channel(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:Tubulin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Actin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:Actin, DNA, Tubulin
    Select objects to measure:Cells, Cytoplasm, Nuclei
